PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Priming EXP
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/meshwa/Documents/PSYCHO-PY/Study_Word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Study_word': 'book'},
      {'Study_word': 'cushion'},
      {'Study_word': 'phone'},
      {'Study_word': 'marble'},
      {'Study_word': 'board'},
      {'Study_word': 'laptop'},
      {'Study_word': 'chart'},
      {'Study_word': 'T-shirt'},
      {'Study_word': 'mouse'},
      {'Study_word': 'pastry'},
      {'Study_word': 'case'},
      {'Study_word': 'cruise'},
      {'Study_word': 'police'},
      {'Study_word': 'keys'},
      {'Study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/meshwa/Documents/PSYCHO-PY/test_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p', 'reference': 'laptop', 'old_new': 'old'},
      {'test_word': '_ha_t', 'reference': 'chart', 'old_new': 'old'},
      {'test_word': 'T_hi_t', 'reference': 'T-shirt', 'old_new': 'old'},
      {'test_word': '_ou_se', 'reference': 'mouse', 'old_new': 'old'},
      {'test_word': 'p_as_tr_', 'reference': 'pastery', 'old_new': 'old'},
      {'test_word': 'c_s_', 'reference': 'case', 'old_new': 'old'},
      {'test_word': '_ru_is_', 'reference': 'cruise', 'old_new': 'old'},
      {'test_word': 'p_li_e', 'reference': 'police', 'old_new': 'old'},
      {'test_word': 'k_y_', 'reference': 'keys', 'old_new': 'old'},
      {'test_word': 'p_st_r', 'reference': 'poster', 'old_new': 'old'},
      {'test_word': '_o_rd', 'reference': 'board', 'old_new': 'old'},
      {'test_word': '_a_bl_', 'reference': 'marble', 'old_new': 'old'},
      {'test_word': '_ho_e', 'reference': 'phone', 'old_new': 'old'},
      {'test_word': '_oo_', 'reference': 'book', 'old_new': 'old'},
      {'test_word': 'c_s_io', 'reference': 'cushion', 'old_new': 'old'},
      {'test_word': 'ta_l_', 'reference': 'table', 'old_new': 'new'},
      {'test_word': 'p_nc_l', 'reference': 'pencil', 'old_new': 'new'},
      {'test_word': 'v_s_', 'reference': 'vase', 'old_new': 'new'},
      {'test_word': 'bo_t_e', 'reference': 'bottle', 'old_new': 'new'},
      {'test_word': 'c_m_ra', 'reference': 'camera', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
